# Water Sphere and proton beam.

#d:BeamZ = -10. cm

### World ###
s:Ge/World/Type     = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX      = 25. cm
d:Ge/World/HLY      = 25. cm
d:Ge/World/HLZ      = 25. cm
d:Ge/World/TransX   = 0. cm
d:Ge/World/TransY   = 0. cm
d:Ge/World/TransZ   = 0. cm
d:Ge/World/RotX     = 0. deg
d:Ge/World/RotY     = 0. deg
d:Ge/World/RotZ     = 0. deg

### Material Definition ###
d:Ma/Water/Density = 1. g/cm3
sv:Ma/Water/Components = 2 "Hydrogen" "Oxygen"
uv:Ma/Water/Fractions = 2 0.666 0.334 

d:Ma/Copper/Density = 8.96 g/cm3
sv:Ma/Copper/Components = 1 "Copper"
uv:Ma/Copper/Fractions = 1 1. 

### Water Sphere ###
s:Ge/WaterSphere/Type      = "TsSphere"
s:Ge/WaterSphere/Parent    = "World"
s:Ge/WaterSphere/Material  = "Water"
d:Ge/WaterSphere/RMax      = 2. cm

### Copper Colimator ###
s:Ge/Colimator/Type     = "TsCylinder"
s:Ge/Colimator/Parent   = "World"
s:Ge/Colimator/Material = "Copper"
d:Ge/Colimator/RMin     = 3. mm
d:Ge/Colimator/RMax     = 5. mm
d:Ge/Colimator/HL       = 5. cm
d:Ge/Colimator/TransX   = 0. cm
d:Ge/Colimator/TransY   = 0. cm
d:Ge/Colimator/TransZ   = -20. cm
d:Ge/Colimator/RotX     = 0. deg
d:Ge/Colimator/RotY     = 0. deg
d:Ge/Colimator/RotZ     = 0. deg
s:Ge/Colimator/Color    = "blue"
#i:Ge/Colimator/RBins    = 2


### Beam position ###
s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = -10. cm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

### Particle source ###
s:So/ProtonSource/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/ProtonSource/Component = "BeamPosition"
s:So/ProtonSource/BeamParticle = "proton"
d:So/ProtonSource/BeamEnergy = 10. MeV
u:So/ProtonSource/BeamEnergySpread = 1. #=0.1 MeV/10 MeV * 100
s:So/ProtonSource/BeamPositionDistribution = "Gaussian" # Flat or Gaussian
s:So/ProtonSource/BeamPositionCutoffShape = "Ellipse" # Point, Ellipse, Rectangle or Isotropic
d:So/ProtonSource/BeamPositionCutoffX = 0.5 mm
d:So/ProtonSource/BeamPositionCutoffY = 0.5 mm
d:So/ProtonSource/BeamPositionSpreadX = 0.3 mm
d:So/ProtonSource/BeamPositionSpreadY = 0.3 mm
s:So/ProtonSource/BeamAngularDistribution = "Gaussian" # Flat or Gaussian
d:So/ProtonSource/BeamAngularCutoffX = 0.1 deg # almost twice the size of the beam
d:So/ProtonSource/BeamAngularCutoffY = 0.1 deg
d:So/ProtonSource/BeamAngularSpreadX = 0.0032 rad
d:So/ProtonSource/BeamAngularSpreadY = 0.0032 rad
i:So/ProtonSource/NumberOfHistoriesInRun = 1000
#i:So/ProtonSource/NumberOfHistoriesInRandomJob = 10


### View window ###
s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
b:Gr/ViewA/IncludeAxes      = "True"
d:Gr/ViewA/Theta            = 90 deg
d:Gr/ViewA/Phi              = 0 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
s:Gr/ViewA/AxesComponent    = "World"
d:Gr/ViewA/AxesSize         = 0.6 m
u:Gr/ViewA/Zoom             = 2.

#b:Ts/PauseBeforeQuit = "True"

#i:Sc/WaterSphere/RBins     = 1
#i:Sc/WaterSphere/PhiBins   = 1
#i:Sc/WaterSphere/ThetaBins = 1

### Energy Scorer ###
s:Sc/EnergyWater/Component = "WaterSphere"
s:Sc/EnergyWater/Quantity = "EnergyDeposit"
i:Sc/EnergyWater/EBins = 100 # defaults to 1, that is, un-binned
d:Sc/EnergyWater/EBinMin = 0. MeV # defaults to zero
d:Sc/EnergyWater/EBinMax = 10. MeV # must be specified if EBins is greater than 1
s:Sc/EnergyWater/EBinEnergy = "IncidentTrack" # "IncidentTrack", "PreStep" or ˓→"DepositedInStep"
#sv:Sc/EnergyWater/Report = 1 "CumulativeVolumeHistogram"
s:Sc/EnergyWater/OutputFile = "energy_water"
s:Sc/EnergyWater/OutputType = "csv"
s:Sc/EnergyWater/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or ˓→"Increment"

### Count Scorer ###
s:Sc/CountSphere/Quantity = "EffectiveCharge"
s:Sc/CountSphere/Component = "WaterSphere"
sv:Sc/CountSphere/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/CountSphere/OutputFile = "counts_water"
s:Sc/CountSphere/OutputType = "csv" 
#d:Sc/CountSphere/HistogramMin = 0. MeV
#d:Sc/CountSphere/HistogramMax = 10. MeV
#i:Sc/CountSphere/HistogramBins = 100
i:Sc/CountSphere/EBins = 100 # defaults to 1, that is, un-binned
d:Sc/CountSphere/EBinMin = 0. MeV # defaults to zero
d:Sc/CountSphere/EBinMax = 10. MeV # must be specified if EBins is greater than 1
s:Sc/CountSphere/EBinEnergy = "IncidentTrack" # "IncidentTrack", "PreStep" or "DepositedInStep"
#sv:Sc/CountSphere/Report = 1 "CumulativeVolumeHistogram"
#sc:Sc/CountSphere/EBinEnergy = " PreStep " #this command adjusts the energybinning from incident energy to kinetic energy
#s:Sc/CountSphere/RootFileName = “WaterSphere” # name for ROOT output file
s:Sc/CountSphere/IfOutputFileAlreadyExists = "Overwrite"

### Scorer take 3 ###
#s:Sc/EnergyScorer/Component = "WaterSphere"
#s:Sc/EnergyScorer/Quantity = "PhaseSpace"
#s:Sc/EnergyScorer/IfOutputFileAlreadyExists="OverWrite"
#s:Sc/EnergyScorer/Surface = "WaterSphere/PhiPlusSurface"
#sv:Sc/EnergyScorer/OnlyIncludeParticlesNamed = 1 "proton"
#i:Sc/EnergyScorer/HistogramBins = 1000
#d:Sc/EnergyScorer/HistogramMin = 0.0 MeV
#d:Sc/EnergyScorer/HistogramMax = 10. MeV
#i:Sc/EnergyScorer/EBins = 2000
#d:Sc/EnergyScorer/EBinMin = 0. MeV
#d:Sc/EnergyScorer/EBinMax = 10. MeV
#sv:Sc/EnergyScorer/Report = 1 "CumulativeVolumeHistogram"
#sc:Sc/EnergyScorer/EBinEnergy = "PreStep"
#s:Sc/EnergyScorer/OutputFile = "MyFile"
#s:Sc/EnergyScorer/OutputType = "ROOT"

### Scorer take 4 ###
s:Sc/DoseAtPhantomByE/Quantity                  = "EnergyDeposit"
s:Sc/DoseAtPhantomByE/Component                 = "WaterSphere"
b:Sc/DoseAtPhantomByE/OutputToConsole           = "TRUE"
s:Sc/DoseAtPhantomByE/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseAtPhantomByE/OutputType                = "Root"
i:Sc/DoseAtPhantomByE/EBins                     = 100
d:Sc/DoseAtPhantomByE/EBinMax                   = 10. MeV
i:Sc/DoseAtPhantomByE/HistogramBins             = 100
d:Sc/DoseAtPhantomByE/HistogramMin              = 0. MeV
d:Sc/DoseAtPhantomByE/HistogramMax              = 10. MeV

