# Water Sphere and proton beam, including the colimator

d:Ge/BeamZ/Position = -5. cm - Ge/Sphere/Radius #First value is the offset betwen the exit of the nose and the water sphere
d:Ge/Sphere/Radius = 2. cm

### World ###
s:Ge/World/Type     = "TsBox"
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX      = 25. cm
d:Ge/World/HLY      = 25. cm
d:Ge/World/HLZ      = 25. cm
d:Ge/World/TransX   = 0. cm
d:Ge/World/TransY   = 0. cm
d:Ge/World/TransZ   = 0. cm
d:Ge/World/RotX     = 0. deg
d:Ge/World/RotY     = 0. deg
d:Ge/World/RotZ     = 0. deg

### Material Definition ###
d:Ma/Water/Density = 1. g/cm3
sv:Ma/Water/Components = 2 "Hydrogen" "Oxygen"
uv:Ma/Water/Fractions = 2 0.666 0.334 

d:Ma/Copper/Density = 8.96 g/cm3
sv:Ma/Copper/Components = 1 "Copper"
uv:Ma/Copper/Fractions = 1 1. 

d:Ma/Kapton/Density = 1.42 g/cm3
sv:Ma/Kapton/Components = 4 "Hydrogen" "Carbon" "Nitrogen" "Oxygen"
uv:Ma/Kapton/Fractions = 4 0.026362 0.691133 0.073270 0.209235 

### Water Sphere ###
s:Ge/WaterSphere/Type      = "TsSphere"
s:Ge/WaterSphere/Parent    = "World"
s:Ge/WaterSphere/Material  = "Water"
d:Ge/WaterSphere/RMax      = Ge/Sphere/Radius cm

### Copper Colimator ###
s:Ge/Colimator/Type     = "TsCylinder"
s:Ge/Colimator/Parent   = "World"
s:Ge/Colimator/Material = "Vacuum"
d:Ge/Colimator/RMin     = 3. mm
d:Ge/Colimator/RMax     = 5. mm
d:Ge/Colimator/HL       = 35.375 mm
d:Ge/Colimator/TransX   = 0. cm
d:Ge/Colimator/TransY   = 0. cm
d:Ge/Colimator/TransZ   = Ge/BeamZ/Position - 3.5375 cm
d:Ge/Colimator/RotX     = 0. deg
d:Ge/Colimator/RotY     = 0. deg
d:Ge/Colimator/RotZ     = 0. deg
s:Ge/Colimator/Color    = "blue"
#i:Ge/Colimator/RBins    = 2

### Vacuum inside the Colimator ###
s:Ge/VacuumCol/Type     = "TsCylinder"
s:Ge/VacuumCol/Parent   = "World"
s:Ge/VacuumCol/Material = "Vacuum"
d:Ge/VacuumCol/RMax     = 3. mm
d:Ge/VacuumCol/HL       = 35.375 mm
d:Ge/VacuumCol/TransX   = 0. cm
d:Ge/VacuumCol/TransY   = 0. cm
d:Ge/VacuumCol/TransZ   = Ge/BeamZ/Position - 3.5375 cm
d:Ge/VacuumCol/RotX     = 0. deg
d:Ge/VacuumCol/RotY     = 0. deg
d:Ge/VacuumCol/RotZ     = 0. deg
#i:Ge/VacuumCol/RBins    = 2

### Kapton Film (larger colimator) ###
s:Ge/KaptonFilm/Type     = "TsCylinder"
s:Ge/KaptonFilm/Parent   = "World"
s:Ge/KaptonFilm/Material = "Vacuum"
d:Ge/KaptonFilm/RMax     = 3. mm
d:Ge/KaptonFilm/HL       = 0.00125 mm
d:Ge/KaptonFilm/TransX   = 0. cm
d:Ge/KaptonFilm/TransY   = 0. cm
d:Ge/KaptonFilm/TransZ   = Ge/BeamZ/Position + 0.0025 cm
d:Ge/KaptonFilm/RotX     = 0. deg
d:Ge/KaptonFilm/RotY     = 0. deg
d:Ge/KaptonFilm/RotZ     = 0. deg
#i:Ge/KaptonFilm/RBins    = 2

### Beam position ###
s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = Ge/BeamZ/Position - 1. cm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

### Particle source ###
s:So/ProtonSource/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/ProtonSource/Component = "BeamPosition"
s:So/ProtonSource/BeamParticle = "proton"
d:So/ProtonSource/BeamEnergy = 10. MeV
u:So/ProtonSource/BeamEnergySpread = 1. #=0.1 MeV/10 MeV * 100
s:So/ProtonSource/BeamPositionDistribution = "Gaussian" # Flat or Gaussian
s:So/ProtonSource/BeamPositionCutoffShape = "Ellipse" # Point, Ellipse, Rectangle or Isotropic
d:So/ProtonSource/BeamPositionCutoffX = 0.5 mm
d:So/ProtonSource/BeamPositionCutoffY = 0.5 mm
d:So/ProtonSource/BeamPositionSpreadX = 0.3 mm
d:So/ProtonSource/BeamPositionSpreadY = 0.3 mm
s:So/ProtonSource/BeamAngularDistribution = "Gaussian" # Flat or Gaussian
d:So/ProtonSource/BeamAngularCutoffX = 0.1 deg 
d:So/ProtonSource/BeamAngularCutoffY = 0.1 deg
d:So/ProtonSource/BeamAngularSpreadX = 0.0032 rad # TRY ZERO
d:So/ProtonSource/BeamAngularSpreadY = 0.0032 rad
i:So/ProtonSource/NumberOfHistoriesInRun = 1000
#i:So/ProtonSource/NumberOfHistoriesInRandomJob = 10


### View window ###
s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
b:Gr/ViewA/IncludeAxes      = "True"
d:Gr/ViewA/Theta            = 90 deg
d:Gr/ViewA/Phi              = 0 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
s:Gr/ViewA/AxesComponent    = "World"
d:Gr/ViewA/AxesSize         = 0.6 m
u:Gr/ViewA/Zoom             = 2.
b:Ts/PauseBeforeQuit = "True"

#i:Sc/WaterSphere/RBins     = 1
#i:Sc/WaterSphere/PhiBins   = 1
#i:Sc/WaterSphere/ThetaBins = 1

### Count Scorer ###
s:Sc/CountSphere/Quantity = "EffectiveCharge"
s:Sc/CountSphere/Component = "WaterSphere"
sv:Sc/CountSphere/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/CountSphere/OutputFile = "counts_water"
s:Sc/CountSphere/OutputType = "csv" 
i:Sc/CountSphere/EBins = 1000 # defaults to 1, that is, un-binned
d:Sc/CountSphere/EBinMin = 0. MeV # defaults to zero
d:Sc/CountSphere/EBinMax = 12. MeV # must be specified if EBins is greater than 1
s:Sc/CountSphere/EBinEnergy = "DepositedInStep" # "IncidentTrack", "PreStep" or "DepositedInStep"
s:Sc/CountSphere/IfOutputFileAlreadyExists = "Overwrite"